// LSO principal cell: soma, two 400 um dendrites, short myelinated axon.
// GENERATED by models/mso/build_lso_axon.py -- do not edit by hand.
//
// Morphology (human):
//   Primary dendrites traceable to 400 um from the soma.
//   Soma sizes, transverse plane (major x minor axis, % of population):
//     stellate ~50%   27 x 13 um   (ellipse area 278 +/- 11 um2)
//     fusiform ~25%   34 x  9 um   (ellipse area 241 +/-  9 um2)
//     round    ~25%   21 x 14 um   (ellipse area 231 +/- 13 um2)
//   The soma here is the 50/25/25 weighted mean (27.25 x 12.25, so L=27,
//   dia=12), as a NEURON cylinder with length = major axis, diameter = minor.
//
// Channel kinetics: Rothman & Manis 2003 (klt, kht, nax, ih); AHP (ahp.mod).
// Conductance densities are gerbil-derived (Helfert & Schwartz 1987;
// Haragopal & Winters 2023), the "fast" LSO class of human LSO models.
//
// Sections (model axes: x dorsal, y rostral, z medial on the right cell):
//   soma:     L = 27 um, dia = 12 um, along y, the dendritic axis
//   dend_A/B: primary dendrites, +y / -y, 400 um, 3.5 -> 1.5 um
//   ais, internode[], node[]: the axon, see build_lso_axon.py
//
// Every cell is of the bipolar (fusiform) type. Its two dendrites receive the
// same SBC excitation, so their dipoles largely cancel and the far field is
// dominated by the axon.
//
// The 400 um dendrites are electrotonically long (lambda ~ 144 um at
// Rm = 500 ohm.cm2).

// This file: L cell. Axon: AIS 25 um + 3 x (75 um internode + node) along [-0.707, 0.0, 0.707], bend, 1 x (150 um internode + node) along [-0.707, 0.707, 0.0], sealed end.
// Myelin (derived): exit g 0.79 cm = 0.03912, post-bend g 0.65 cm = 0.01931 uF/cm2; Ra = 70 ohm.cm. Node: {'nax': 2.0, 'kht': 0.015, 'ih': 0.0005}.

create soma, dend_A, dend_B, ais
create internode[4], node[4]
access soma

soma {
    nseg = 1
    Ra = 150
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert klt   gbar_klt = 0.010
    insert kht   gbar_kht = 0.010
    insert ih    gbar_ih = 0.0005
    insert nax   gbar_nax = 0.10   ena = 55
    ek = -77
    insert lso_ahp   gbar_lso_ahp = 0.002
    pt3dadd(0.0000, -13.5000, 0.0000, 12)
    pt3dadd(0.0000, 13.5000, 0.0000, 12)
}

dend_A {
    nseg = 29
    Ra = 150
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert klt   gbar_klt = 0.002
    insert ih    gbar_ih = 0.0001
    ek = -77
    pt3dadd(0.0000, 13.5000, 0.0000, 3.5)
    pt3dadd(0.0000, 413.5000, 0.0000, 1.5)
}

dend_B {
    nseg = 29
    Ra = 150
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert klt   gbar_klt = 0.002
    insert ih    gbar_ih = 0.0001
    ek = -77
    pt3dadd(0.0000, -13.5000, 0.0000, 3.5)
    pt3dadd(0.0000, -413.5000, 0.0000, 1.5)
}

ais {
    nseg = 5
    Ra = 150
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert nax   gbar_nax = 1   ena = 55
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih   gbar_ih = 0.0005
    ek = -77
    pt3dadd(0.0000, 0.0000, 6.0000, 1.5)
    pt3dadd(-17.6777, 0.0000, 23.6777, 1.5)
}

internode[0] {
    nseg = 5
    Ra = 70
    cm = 0.0391238
    insert pas   g_pas = 7.82476e-05   e_pas = -63
    pt3dadd(-17.6777, 0.0000, 23.6777, 1.5)
    pt3dadd(-70.7107, 0.0000, 76.7107, 1.5)
}
node[0] {
    nseg = 1
    Ra = 70
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert nax   gbar_nax = 2   ena = 55
    insert kht   gbar_kht = 0.015
    insert ih   gbar_ih = 0.0005
    ek = -77
    pt3dadd(-70.7107, 0.0000, 76.7107, 1)
    pt3dadd(-71.4178, 0.0000, 77.4178, 1)
}

internode[1] {
    nseg = 5
    Ra = 70
    cm = 0.0391238
    insert pas   g_pas = 7.82476e-05   e_pas = -63
    pt3dadd(-71.4178, 0.0000, 77.4178, 1.5)
    pt3dadd(-124.4508, 0.0000, 130.4508, 1.5)
}
node[1] {
    nseg = 1
    Ra = 70
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert nax   gbar_nax = 2   ena = 55
    insert kht   gbar_kht = 0.015
    insert ih   gbar_ih = 0.0005
    ek = -77
    pt3dadd(-124.4508, 0.0000, 130.4508, 1)
    pt3dadd(-125.1579, 0.0000, 131.1579, 1)
}

internode[2] {
    nseg = 5
    Ra = 70
    cm = 0.0391238
    insert pas   g_pas = 7.82476e-05   e_pas = -63
    pt3dadd(-125.1579, 0.0000, 131.1579, 1.5)
    pt3dadd(-178.1909, 0.0000, 184.1909, 1.5)
}
node[2] {
    nseg = 1
    Ra = 70
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert nax   gbar_nax = 2   ena = 55
    insert kht   gbar_kht = 0.015
    insert ih   gbar_ih = 0.0005
    ek = -77
    pt3dadd(-178.1909, 0.0000, 184.1909, 1)
    pt3dadd(-178.8980, 0.0000, 184.8980, 1)
}

internode[3] {
    nseg = 5
    Ra = 70
    cm = 0.0193143
    insert pas   g_pas = 3.86286e-05   e_pas = -63
    pt3dadd(-178.8980, 0.0000, 184.8980, 1.5)
    pt3dadd(-284.9640, 106.0660, 184.8980, 1.5)
}
node[3] {
    nseg = 1
    Ra = 70
    cm = 1
    insert pas   g_pas = 0.002   e_pas = -63
    insert nax   gbar_nax = 2   ena = 55
    insert kht   gbar_kht = 0.015
    insert ih   gbar_ih = 0.0005
    ek = -77
    pt3dadd(-284.9640, 106.0660, 184.8980, 1)
    pt3dadd(-285.6711, 106.7731, 184.8980, 1)
}

connect dend_A(0), soma(1)
connect dend_B(0), soma(0)
connect ais(0), soma(0.5)
connect internode[0](0), ais(1)
connect node[0](0), internode[0](1)
for i = 1, 3 {
    connect internode[i](0), node[i-1](1)
    connect node[i](0), internode[i](1)
}

access soma
